PsychoPy2experiment version="2020.1.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = AOC
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.804,0.804,0.961]
  expName = trk-encoding
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Routines
  Routine break_2
  Routine inter_task_break
  Routine start_encoding
    TextComponent setup_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        Első feladat
        Galéria berendezés
    CodeComponent select_encoding_trials
      Code Type = Auto->JS
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      Begin Experiment:
        tables = [0]
        selected = np.random.choice(tables)
        selected = str(selected)
        stimuli_table = 'stimuli_tables/encoding_trials_'+ selected + '.csv'
    CodeComponent encoding_run_setup
      Code Type = Auto->JS
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      Begin Routine:
        start = 0
        end = 0
        step = 1
        n_runs = 3
        run_counter = 0
  Routine start_recognition
    CodeComponent recognition_run_setup
      Code Type = Auto->JS
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      Begin Routine:
        start = 0
        end = 0
        step = 1
        n_runs = 3
        run_counter = 0
    CodeComponent select_recognition_trials
      Code Type = Auto->JS
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      Begin Routine:
        stimuli_table = 'stimuli_tables/recognition_trials_'+ selected + '.csv'
    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Második feladat
        Képfelismerés
  Routine start_enc_run
    CodeComponent create_enc_run
      Code Type = Both
      Begin JS Routine:
        start = end;
        end = (start + 2);
        selection = Array.from({length: end - start}, (_, index) => index + start)
      Begin Routine:
        start = end
        end = start + 2
        selection = np.arange(start, end, step)
    CodeComponent enc_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Szünet\nA folytatáshoz nyomja le a jobb nyilat'

        if run_counter >= 3:
            end_run_text = 'Vége az első feladatnak'
    TextComponent enc_run_start
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Kezdődik a feladat...
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  Routine enc_trial
    ImageComponent map_enc_trial
      image = stimuli/GalleryPlanInside.jpg
      pos = (0, -25)
      size = (1040, 1000)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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    ImageComponent enc_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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    KeyboardComponent enc_key_resp_trial
      allowedKeys = 'f', 'j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine end_enc_run
    TextComponent enc_run_end
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200
      text [set every repeat] = $end_run_text
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    KeyboardComponent enc_run_end_response
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200
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  Routine consent
  Routine info
  Routine lab_introduction
    TextComponent lab_thanks
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
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      text:
        Köszönjük, hogy hozzájárul kutatócsoportunk munkájához azzal, hogy részt vesz vizsgálatunkban!
    KeyboardComponent key_resp
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine enc_instructions_1
    TextComponent text
      color = black
      letterHeight = 0.04
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.9
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      text:
        Ön ennek a modern képgalériának a kurátora.

        A legújabb kiállításra a vártnál több kép érkezett.

        Kurátorként az Ön feladata lesz eldönteni, mely képeket válogatjuk be a kiállított darabok közé, és hogy a kép illeszkedik-e a galéria adott pontjára.

        Az Ön ideje nagyon drága a galériának, így a döntésre egy-egy képről csak 3 másodperce lesz.

        A folytatáshoz nyomja le a jobb nyilat.
    ImageComponent image
      image = stimuli/GalleryBuildingFromOutside.jpg
      pos = (450, 0.0)
      size = (600, 450)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = pix
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    KeyboardComponent key_resp_3
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine enc_instructions_2
    TextComponent text_2
      color = black
      letterHeight = 0.04
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.7
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      text:
        Ez a galéria térképe felülről, nézze meg figyelmesen.

        A feladat során a képek a térképre vetítve jelennek meg, azon a helyen, ahol kiállításra kerülhetnek.

        Döntse el a képekről, hogy ki legyenek-e állítva a bemutatott helyen.

        Minden képet nézzen meg figyelmesen, és minden képre adjon választ.

        A folytatáshoz nyomja le a jobb nyilat.
    ImageComponent image_2
      image = stimuli/GalleryInfo.jpg
      pos = (425, 0)
      size = (1000,750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine enc_fx
    ImageComponent map_enc_fx
      durationEstim = 1.5
      image = stimuli/GalleryPlanInside.jpg
      pos = (0, -25)
      size = (1040, 1000)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = pix
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    TextComponent enc_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 50
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = pix
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    KeyboardComponent enc_key_resp_fx
      allowedKeys = 'f', 'j'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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  Routine start_rec_run
    CodeComponent create_rec_run
      Code Type = Both
      Begin JS Routine:
        start = end;
        end = (start + 3);
        selection = Array.from({length: end - start}, (_, index) => index + start)
      Begin Routine:
        start = end
        end = start + 3
        selection = np.arange(start, end, step)
    CodeComponent rec_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Szünet\nA folytatáshoz nyomja le a jobb nyilat'

        if run_counter >= 3:
            end_run_text = 'Vége a második feladatnak'
    TextComponent rec_run_start
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a feladat...
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  Routine end_rec_run
    TextComponent rec_run_end
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $end_run_text
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    KeyboardComponent rec_run_end_response
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine rec_fx
    ImageComponent map_rec_fx
      durationEstim = 1.5
      image = stimuli/GalleryPlanInside.jpg
      pos = (0,-25)
      size = (1040, 1000)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = pix
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    TextComponent rec_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 50
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = pix
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    KeyboardComponent rec_key_resp_fx
      allowedKeys = 'f','j','k'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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  Routine rec_trial
    ImageComponent map_rec_trial
      image = stimuli/GalleryPlanInside.jpg
      pos = (0, -25)
      size = (1040, 1000)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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    ImageComponent main_image_rec
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size = (300,300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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    KeyboardComponent rec_key_resp_trial
      allowedKeys = 'f','j','k'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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Flow
  Routine consent
  Routine lab_introduction
  Routine start_encoding
  Routine enc_instructions_1
  Routine enc_instructions_2
  LoopInitiator enc_runs loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine start_enc_run
    LoopInitiator enc_trials loopType="TrialHandler"
      Selected rows = $selection
      conditionsFile = $stimuli_table
      loopType = sequential
      nReps = 1
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      Routine enc_fx
      Routine enc_trial
    LoopTerminator enc_trials
    Routine end_enc_run
  LoopTerminator enc_runs
  Routine inter_task_break
  Routine start_recognition
  LoopInitiator rec_runs loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine start_rec_run
    LoopInitiator rec_trials loopType="TrialHandler"
      Selected rows = $selection
      conditionsFile = $stimuli_table
      loopType = sequential
      nReps = 1
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      Routine rec_fx
      Routine rec_trial
    LoopTerminator rec_trials
    Routine end_rec_run
  LoopTerminator rec_runs
